PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = EgocentricNav
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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  Routine navigationRoutine
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    PolygonComponent arena
      fillColor = white
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent player
      fillColor = white
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        # Example variables (define in "Begin Routine" or globally)
        if not hasattr(expInfo, 'playerPos'):
            playerPos = [0.0, 0.0]  # x,y in some coordinate system
            playerAngle = 0.0       # degrees, 0 = facing "up" or whatever reference

        # Movement parameters
        moveSpeed = 0.05
        turnSpeed = 3.0

        keys = event.getKeys()

        for key in keys:
            if key == 'up':
                # Move forward in direction of playerAngle
                import math
                rad = math.radians(playerAngle)
                playerPos[0] += moveSpeed * math.sin(rad)
                playerPos[1] += moveSpeed * math.cos(rad)
            elif key == 'down':
                # Move backward
                import math
                rad = math.radians(playerAngle)
                playerPos[0] -= moveSpeed * math.sin(rad)
                playerPos[1] -= moveSpeed * math.cos(rad)
            elif key == 'left':
                playerAngle += turnSpeed
            elif key == 'right':
                playerAngle -= turnSpeed
            elif key == 'return':
                # Proceed to annotation
                continueRoutine = False
                # Or trigger next routine in your flow

        # Update your "player" stimulus position/orientation
        playerStim.pos = playerPos
        playerStim.ori = playerAngle
  Routine annotationRoutine
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Flow
  Routine navigationRoutine
  Routine annotationRoutine
